# 1 "/opt/topspin3.5pl5/exp/stan/nmr/lists/pp/user/zgesgp_decCNpresat_ijk"
;zgesgp
;avance-version (10/02/12)
;1D sequence
;water suppression using excitation sculpting with gradients
;T.-L. Hwang & A.J. Shaka, J. Magn. Reson.,
;   Series A 112 275-279 (1995)
;
;$CLASS=HighRes
;$DIM=1D
;$TYPE=
;$SUBTYPE=
;$COMMENT=
;
;Composite pulse decoupling on 13C and 15N channels


prosol relations=<triple>
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"p2=p1*2"
"d12=20u"


"TAU=de+p1*2/3.1416+50u"
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"acqt0=0"
baseopt_echo


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; dimension 1D; AQ_mode 
define delay MCWRK
define delay MCREST
"MCREST = 30m - 30m"
"MCWRK = 0.333333*30m"

    dccorr
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1 ze
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2 MCWRK  * 2 do:f2  do:f3
LBLF0, MCWRK 
  MCREST
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  d12 fq=cnst30:f1 pl30:f1 setnmr3^0 setnmr0^34^32^33 ctrlgrad 7
  4u  cw:f1
  d1
  4u do:f1
  4u pl1:f1 fq=0:f1
  p1 ph1
  
  50u setnmr3|0 setnmr0|34|32|33 ctrlgrad 0
  p16:gp1
  d16 pl0:f1
  (p12:sp1 ph2:r):f1
  4u
  d12 pl1:f1
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  p2 ph3

  4u
  p16:gp1
  d16 
  TAU
  p16:gp2
  d16 pl0:f1
  (p12:sp1 ph4:r):f1
  4u
  d12 pl1:f1

  p2 ph5
  4u pl12:f2 pl16:f3
  p16:gp2
  d16
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  go=2 ph31 cpd2:f2 cpd3:f3
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  MCWRK do:f2 do:f3 wr #0
  MCWRK zd
  lo to LBLF0 times td0

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  4u setnmr3^0 setnmr0^34^32^33 ctrlgrad 7
exit


ph1=0
ph2=0 1
ph3=2 3
ph4=0 0 1 1
ph5=2 2 3 3
ph31=0 2 2 0 
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;pl30 : f1 presat power
;cnst30 : offset (Hz) from o1p to TRIS resonance
;pl0 : 0W
;pl1 : f1 channel - power level for pulse (default)
;pl12: f2 channel - power level for CPD/BB decoupling
;pl16: f3 channel - power level for CPD/BB decoupling
;sp1 : f1 channel - shaped pulse 180 degree
;p1 : f1 channel -  90 degree high power pulse
;p2 : f1 channel - 180 degree high power pulse
;p12: f1 channel - 180 degree shaped pulse (Squa100.1000)   [2 msec]
;p16: homospoil/gradient pulse
;d1 : relaxation delay; 1-5 * T1
;d12: delay for power switching                             [20 usec]
;d16: delay for homospoil/gradient recovery
;NS: 8 * n, total number of scans: NS * TD0
;DS: 4


;use gradient ratio:    gp 1 : gp 2
;                         31 :   11
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;for z-only gradients:
;gpz1: 31%
;gpz2: 11%

;use gradient files:
;gpnam1: SMSQ10.100
;gpnam2: SMSQ10.100

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;$Id: zgesgp,v 1.8 2010/02/12 15:03:56 ber Exp $
